OpenViBE-Scenario

Generic stream reader => #0
  Filename = C:/Users/Takumi Kodama/Dropbox/MATLAB/2015ExperimentDatainJapan/ovsub0/record-[2015.06.15-18.38.45](0615 TomekTrial3).ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Identity => #2
New input[0]=#1.Output stream 2, New input[1]=#0.Output stream 4 -> Target-NonTarget-Separator => #3
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#2, Input stimulations=#3.Stimulations -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#4.Epoched signal -> CSV File Writer "All-Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-all-target-signal.csv
  Column separator = ;
  Precision = 10
#4.Resynced stimulations -> CSV File Writer "All-Target-Onset"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-all-target-onset.csv
  Column separator = ;
  Precision = 10
Input signal=#2, Input stimulations=#3.New output -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#7.Epoched signal -> CSV File Writer "All-NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-all-nontarget-signal.csv
  Column separator = ;
  Precision = 10
#7.Resynced stimulations -> CSV File Writer "All-NonTarget-Onset"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-all-nontarget-onset.csv
  Column separator = ;
  Precision = 10
Data=#0.Output stream 2, Stimulations=#0.Output stream 3 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #11
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching "Stimulus 1" => #12
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#12.Epoched signal -> Identity => #13
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching "Stimulus 2" => #14
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#14.Epoched signal -> Identity => #15
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching "Stimulus 3" => #16
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
#16.Epoched signal -> Identity => #17
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching "Stimulus 4" => #18
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
#18.Epoched signal -> Identity => #19
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching "Stimulus 5" => #20
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
#20.Epoched signal -> Identity => #21
Input signal=#11.Output stream 1, Input stimulations=#11.Output stream 2 -> Stimulation based epoching "Stimulus 6" => #22
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
#22.Epoched signal -> Identity => #23
#0.Output stream 4 -> Identity "Stimulus Onsets" => #24
New input[0]=#12.Resynced stimulations, New input[1]=#24 -> Target-NonTarget-Separator => #25
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#13, Input stimulations=#25.Stimulations -> Stimulation based epoching => #26
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#26.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no1-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#13, Input stimulations=#25.New output -> Stimulation based epoching => #28
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#28.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no1-nontarget-signal.csv
  Column separator = ;
  Precision = 10
New input[0]=#14.Resynced stimulations, New input[1]=#24 -> Target-NonTarget-Separator => #30
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#15, Input stimulations=#30.Stimulations -> Stimulation based epoching => #31
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#31.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no2-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#15, Input stimulations=#30.New output -> Stimulation based epoching => #33
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#33.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no2-nontarget-signal.csv
  Column separator = ;
  Precision = 10
New input[0]=#16.Resynced stimulations, New input[1]=#24 -> Target-NonTarget-Separator => #35
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#17, Input stimulations=#35.Stimulations -> Stimulation based epoching => #36
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#36.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no3-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#17, Input stimulations=#35.New output -> Stimulation based epoching => #38
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#38.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no3-nontarget-signal.csv
  Column separator = ;
  Precision = 10
New input[0]=#18.Resynced stimulations, New input[1]=#24 -> Target-NonTarget-Separator => #40
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#19, Input stimulations=#40.Stimulations -> Stimulation based epoching => #41
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#41.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no4-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#19, Input stimulations=#40.New output -> Stimulation based epoching => #43
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#43.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no4-nontarget-signal.csv
  Column separator = ;
  Precision = 10
New input[0]=#20.Resynced stimulations, New input[1]=#24 -> Target-NonTarget-Separator => #45
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#21, Input stimulations=#45.Stimulations -> Stimulation based epoching => #46
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#46.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no5-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#21, Input stimulations=#45.New output -> Stimulation based epoching => #48
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#48.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no5-nontarget-signal.csv
  Column separator = ;
  Precision = 10
New input[0]=#22.Resynced stimulations, New input[1]=#24 -> Target-NonTarget-Separator => #50
  Lua Script = ${Player_ScenarioDirectory}/Target-Nontarget-Separator.lua
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#23, Input stimulations=#50.Stimulations -> Stimulation based epoching => #51
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#51.Epoched signal -> CSV File Writer "Target-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no6-target-signal.csv
  Column separator = ;
  Precision = 10
Input signal=#23, Input stimulations=#50.New output -> Stimulation based epoching => #53
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#53.Epoched signal -> CSV File Writer "NonTarget-Signal"
  Filename = ${Player_ScenarioDirectory}/DiscretedCSV/[$core{date}-$core{time}]-no6-nontarget-signal.csv
  Column separator = ;
  Precision = 10
